<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>C:\Users\Andre Maia Chagas\Box\mouse 8485\8485_11_54_23__2412023_TRAIN1_all.mp4</cv:FileName>
          <cv:PlaybackRate>120</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>166</cv:X>
            <cv:Y>82</cv:Y>
            <cv:Width>230</cv:Width>
            <cv:Height>328</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>6</cv:X>
            <cv:Y>153</cv:Y>
            <cv:Width>37</cv:Width>
            <cv:Height>19</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>187</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
          <Name>RisingEdge</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>12</cv:X>
            <cv:Y>153</cv:Y>
            <cv:Width>37</cv:Width>
            <cv:Height>19</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>187</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>103</cv:X>
            <cv:Y>46</cv:Y>
            <cv:Width>15</cv:Width>
            <cv:Height>31</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>187</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>173</cv:X>
            <cv:Y>53</cv:Y>
            <cv:Width>20</cv:Width>
            <cv:Height>24</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>187</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>97</cv:X>
            <cv:Y>259</cv:Y>
            <cv:Width>17</cv:Width>
            <cv:Height>17</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>187</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>168</cv:X>
            <cv:Y>252</cv:Y>
            <cv:Width>17</cv:Width>
            <cv:Height>30</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>187</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>trials.csv</io:FileName>
        <io:ListSeparator />
        <io:SkipRows>1</io:SkipRows>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="10" Label="Source1" />
      <Edge From="2" To="15" Label="Source1" />
      <Edge From="2" To="20" Label="Source1" />
      <Edge From="2" To="25" Label="Source1" />
      <Edge From="2" To="30" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>